
#=====================================================
# VERBOSITY
#=====================================================

/control/execute mac/verbose.mac

#=====================================================
# VISUALISATION
#=====================================================

/control/execute mac/visu.mac

#=====================================================
# GEOMETRY
#=====================================================

/gate/geometry/setMaterialDatabase data/GateMaterials.db

# World
/gate/world/geometry/setXLength 1. m
/gate/world/geometry/setYLength 1. m
/gate/world/geometry/setZLength 1. m
/gate/world/setMaterial Air

# Water Box
/gate/world/daughters/name              phantom
/gate/world/daughters/insert            box
/gate/phantom/geometry/setXLength      50 cm
/gate/phantom/geometry/setYLength      50 cm
/gate/phantom/geometry/setZLength      50 cm
/gate/phantom/placement/setTranslation 0 0 0 cm
/gate/phantom/setMaterial Water
/gate/phantom/vis/setVisible 1
/gate/phantom/vis/setColor blue

#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addPhysicsList emstandard_opt1
/gate/physics/addProcess RadioactiveDecay

/gate/physics/Gamma/SetCutInRegion      world 10 mm
/gate/physics/Electron/SetCutInRegion   world 10 mm
/gate/physics/Positron/SetCutInRegion   world 10 mm

/gate/physics/Gamma/SetCutInRegion      phantom 0.1 mm
/gate/physics/Electron/SetCutInRegion   phantom 0.1 mm
/gate/physics/Positron/SetCutInRegion   phantom 0.1 mm

/gate/physics/displayCuts


#=====================================================
# DETECTORS
#=====================================================

/gate/actor/addActor                     DoseActor  dose3D
/gate/actor/dose3D/save                  output/distrib.mhd
/gate/actor/dose3D/attachTo    	         phantom
/gate/actor/dose3D/stepHitType           random
/gate/actor/dose3D/setPosition           0 0 0 cm
/gate/actor/dose3D/setVoxelSize          4 4 4 mm
/gate/actor/dose3D/saveEveryNSeconds     60
/gate/actor/dose3D/enableEdep            true
/gate/actor/dose3D/enableUncertaintyEdep true
/gate/actor/dose3D/enableDose            true
/gate/actor/dose3D/enableUncertaintyDose false
/gate/actor/dose3D/enableNumberOfHits    false

/gate/actor/addActor               SimulationStatisticActor stat
/gate/actor/stat/save              output/stat.txt
/gate/actor/stat/saveEveryNSeconds 20


#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize

#=====================================================
# BEAMS
#=====================================================

/control/execute mac/source.mac


#=====================================================
# START BEAMS
#=====================================================

# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto

#/tracking/verbose 1

/gate/application/setTotalNumberOfPrimaries 1000
/gate/application/start
